# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Signal Recovery DSP7265 Lock-in Amplifier (Despereaux)

# The version string should be updated whenever changes are made to this config file
version: 1.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SR_DSP7265_Desperaux


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# The command used to check the model id. Usually *IDN? but ID here for DSP7265
model_cmd: ID

# List of models supported by this driver
model_str_1: 7265

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: 7265

# Check instrument options at startup (True or False). Default is False
check_options: False


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: True


# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False


# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 5

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
# error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages. 
# Normally STAT:ERR?
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
# Switches to local mode, usually :SYST:LOC
final:

# Number of characters to strip from the end of the string returned from the
# instrument, before trying to convert to a number. Default is 0 .
str_value_strip_end: 0


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
[Voltage input mode]
datatype: COMBO
def_value: A input only
combo_def_1: A input only
combo_def_2: -B input only
combo_def_3: A-B differential mode
combo_def_4: Both inputs grounded (test mode)
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 0
set_cmd: VMODE

[Sensitivity]
datatype: COMBO
def_value: 1 V
combo_def_1: 2 nV
combo_def_2: 5 nV
combo_def_3: 10 nV
combo_def_4: 20 nV
combo_def_5: 50 nV
combo_def_6: 100 nV
combo_def_7: 200 nV
combo_def_8: 500 nV
combo_def_9: 1 uV
combo_def_10: 2 uV
combo_def_11: 5 uV
combo_def_12: 10 uV
combo_def_13: 20 uV
combo_def_14: 50 uV
combo_def_15: 100 uV
combo_def_16: 200 uV
combo_def_17: 500 uV
combo_def_18: 1 mV
combo_def_19: 2 mV
combo_def_20: 5 mV
combo_def_21: 10 mV
combo_def_22: 20 mV
combo_def_23: 50 mV
combo_def_24: 100 mV
combo_def_25: 200 mV
combo_def_26: 500 mV
combo_def_27: 1 V
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
cmd_def_9: 9
cmd_def_10: 10
cmd_def_11: 11
cmd_def_12: 12
cmd_def_13: 13
cmd_def_14: 14
cmd_def_15: 15
cmd_def_16: 16
cmd_def_17: 17
cmd_def_18: 18
cmd_def_19: 19
cmd_def_20: 20
cmd_def_21: 21
cmd_def_22: 22
cmd_def_23: 23
cmd_def_24: 24
cmd_def_25: 25
cmd_def_26: 26
cmd_def_27: 27
set_cmd: SEN
get_cmd: SEN.


[Time constant]
datatype: COMBO
def_value: 50 ms
combo_def_1: 10 us
combo_def_2: 20 us
combo_def_3: 40 us
combo_def_4: 80 us
combo_def_5: 160 us
combo_def_6: 320 us
combo_def_7: 640 us
combo_def_8: 5 ms
combo_def_9: 10 ms
combo_def_10: 20 ms
combo_def_11: 50 ms
combo_def_12: 100 ms
combo_def_13: 200 ms
combo_def_14: 500 ms
combo_def_15: 1 s
combo_def_16: 2 s
combo_def_17: 5 s
combo_def_18: 10 s
combo_def_19: 20 s
combo_def_20: 50 s
combo_def_21: 100 s
combo_def_22: 200 s
combo_def_23: 500 s
combo_def_24: 1 ks
combo_def_25: 2 ks
combo_def_26: 5 ks
combo_def_27: 10 ks
combo_def_28: 20 ks
combo_def_29: 50 ks
combo_def_30: 100 ks
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 10
cmd_def_12: 11
cmd_def_13: 12
cmd_def_14: 13
cmd_def_15: 14
cmd_def_16: 15
cmd_def_17: 16
cmd_def_18: 17
cmd_def_19: 18
cmd_def_20: 19
cmd_def_21: 20
cmd_def_22: 21
cmd_def_23: 22
cmd_def_24: 23
cmd_def_25: 24
cmd_def_26: 25
cmd_def_27: 26
cmd_def_28: 27
cmd_def_29: 28
cmd_def_30: 29
set_cmd: TC
get_cmd: TC.


[Oscillator amplitude]
datatype: DOUBLE
unit: V
low_lim: 0
high_lim: 5
set_cmd: OA.
group: Measurement


[Oscillator frequency]
datatype: DOUBLE
unit: Hz
low_lim: 0
high_lim: 2.5E5
set_cmd: OF. 
group: Measurement


[Signal: Amplitude]
datatype: DOUBLE
permission: READ
get_cmd: MAG.
group: Measurement
show_in_measurement_dlg: True

[Signal: Phase]
datatype: DOUBLE
permission: READ
get_cmd: PHA.
group: Measurement
show_in_measurement_dlg: True

[Signal: Frequency]
datatype: DOUBLE
permission: READ
get_cmd: FRQ.
group: Measurement
show_in_measurement_dlg: True


